PsychoPy2experiment version="2020.2.4"
Settings
  Completed URL = $"https://baselpsychology.eu.qualtrics.com/jfe/form/SV_02mMDQJdaoTf4hw?id=" + expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = about:blank
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [1280, 720]
  color = white
  expName = Project 2 Experiment 1
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Routines
  Routine feedback
  Routine part
    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        np.random.choice(12,size=6,replace=False)
  Routine rest
    TextComponent restintro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Take a break for one minute.

        Or

        Please press "SPACE" to continue if you are ready.
    KeyboardComponent restintro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine obsertrial
    TextComponent fixation1
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    TextComponent label1
      letterHeight = 0.07
      pos = (0,-0.35)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $label
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    ImageComponent stimuli1
      image [set every repeat] = $sti
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
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    TextComponent blank1
      letterHeight = 0.1
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 0.4
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  Routine blank2
    TextComponent blank_phase2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = &nbsp;
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  Routine consent2
    TextComponent con2
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        DO I HAVE TO TAKE PART IN THE STUDY? Your participation in this research is voluntary. If you decide to participate in the study, you may withdraw your consent and stop participating at any time without penalty or loss of benefits to which you are otherwise entitled.
        WHO WILL SEE THE INFORMATION THAT I GIVE? We will keep private all research records that identify you, to the extent allowed by law.
        Your information will be combined with information from other people taking part in the study. When we write about the study to share it with other researchers, we will write about the combined information we have gathered. You will not be identified in these written materials. We may publish the results of this study; however, we will keep you name and other identifying information private. The only exceptions to this are if we are asked to share the research files for audit purposes with the CSU Institutional Review Board ethics committee, if necessary. Your identity/record of receiving compensation (NOT your data) may be made available to CSU officials for financial audits.
        WILL I RECEIVE ANY COMPENSATION FOR TAKING PART IN THIS STUDY? If you are participating in exchange for credit for one of your psychology classes, you will receive one half research credit for each half hour that you participate in the experiment. At certain times of the year (such as during the summer), participants can sign up in exchange for payment, rather than for research credit. If you signed up in exchange for payment, you will receive 10 dollar for an experiment up to one-hour in length, and 5 dollar for each additional half hour if the study last longer than one hour.
        WHAT HAPPENS IF I AM INJURED BECAUSE OF THE RESEARCH? The Colorado Governmental Immunity Act determines and may limit Colorado State University's legal responsibility if an injury happens because of this study. Claims against the University must be filed within 180 days of the injury.
        WHAT IF I HAVE QUESTIONS? Before you decide whether to accept this invitation to take part in the study, please ask any questions that might come to mind now. Later, if you have questions about the study, you can contact the investigator, Carol Seger at (970) 491-3540. If you have any questions about your rights as a volunteer in this research, contact the CSU IRB at:  RICRO_IRB@mail.colostate.edu; 970-491-1553.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent con2_red
      color = red
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = If you agree to attend the experiment, please press the "SPACE" to begin the experiment.
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  Routine pretest
    TextComponent pretestText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = $fontWrap
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      text:
        In the following trials you will not receive feedback anymore. Please assign each figure to the category to which the figure most likely belongs.

        Please press the spacebar to begin.
    KeyboardComponent pretestResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine ending
    TextComponent demoText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = $fontWrap
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      text:
        You have completed the judgment task.

        Press the spacebar to move on to the demographic questionnaire and please fill it out.
    KeyboardComponent demoResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine test
    CodeComponent testCode
      Code Type = Auto->JS
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      Begin Routine:
        path = fRandom + "/" + stim
    ImageComponent testStim
      image [set every repeat] = $path
      saveStartStop = False
      size = 250
      startVal [time (s)] = intertrial
      units = pix
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    KeyboardComponent testResp
      allowedKeys = 'e', 'i'
      correctAns = $answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = intertrial
      store = first key
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  Routine accuracy
    TextComponent accText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      stopVal [condition] = accOffset
      text [set every frame] = $accMsg
      wrapWidth = $fontWrap
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    KeyboardComponent accResp
      allowedKeys = ['space']
      correctAns = $answer
      forceEndRoutine = False
      saveStartStop = False
      stopVal [condition] = accOffset
      store = nothing
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    CodeComponent accCode
      Code Type = Both
      Begin Experiment:
        nAccuracy = 50 # accuracy shown all x trials
        accCrit = 90 # criterion for going to test phase
        maxTrials = 1500 # maximal number of training trials
      Begin JS Experiment:
        nAccuracy = 50; // accuracy shown all x trials
        accCrit = 90; // criterion for going to test phase
        maxTrials = 1500; // maximal number of training trials
      Begin JS Routine:
        // Initializes bools
        keyPressed = false;
        accResp.keys = [];
        accMsg = "";

        // Computes accuracy of last 2 * nAccuracy trials
        x = correctResp.slice((- (2 * nAccuracy)));
        acc = Math.round(100 * eval(x.join('+')) / x.length);

        if (((acc > accCrit) && (trialCounter > (2 * nAccuracy)))) {
            traintrials.finished = true;
        } else {
            if ((trialCounter === maxTrials)) {
                traintrials.finished = true;
            } else {
                accMsg = `If you continue like this you will be on average ${acc}% correct; it is possible to be 100% correct.\nPlease stay concentrated and try to improve.\nYour goal is to classify every figure correctly.\n\nPress the spacebar to continue learning.`;
            }
        }

        // Checks if accuracy message should be displayed
        if ((((trialCounter % nAccuracy) === 0) && (trialCounter !== nAccuracy) && (trialCounter !== maxTrials))) {
            accOffset = false;
        } else {
            accOffset = true;
        }
      Begin Routine:
        # Initializes bools
        keyPressed = False
        accResp.keys = []
        accMsg = ""

        # Computes accuracy of last 2 * nAccuracy trials
        acc = np.mean(correctResp[-(2*nAccuracy):]) * 100.0


        if acc > accCrit and trialCounter > 2*nAccuracy:
            traintrials.finished = True
        else:
            if trialCounter == maxTrials:
                traintrials.finished = True
            else:
                accMsg = "If you continue like this you will be on average %d percent correct; it is possible to be 100 percent correct. Please stay concentrated and try to improve.\nYour goal is to classify every figure correctly.\n\nPress the spacebar to continue learning." % (acc)

        # Checks if accuracy message should be displayed
        if (trialCounter % nAccuracy) == 0 and trialCounter != nAccuracy and trialCounter != maxTrials:
            accOffset = False
        else:
            accOffset = True
      Each Frame:
        # Displays feedback if key is pressed
        if (not keyPressed) and len(accResp.keys) > 0:
            accMsg = ""
            trialEnd = t + intertrial
            keyPressed = True

        if keyPressed and t > trialEnd:
            accOffset = True
      Each JS Frame:
        // Displays feedback if key is pressed
        if (((! keyPressed) && (accResp.keys.length > 0))) {
            accMsg = "";
            trialEnd = t + intertrial;
            keyPressed = true;
        }

        if ((keyPressed && (t > trialEnd))) {
            accOffset = true;
        }
      End JS Routine:
        //if (((trialCounter === maxTrials) && (acc <= accCrit))) {
        //    return quitPsychoJS('', true);
        //}
      End Routine:
        #if trialCounter == maxTrials and acc <= accCrit:
        #    core.quit()
  Routine familiarization
    CodeComponent famCode
      Code Type = Both
      Begin Experiment:
        # Font and size
        font = "Helvetica"
        fontSize = 18
        fontWrap = 800
      Begin JS Experiment:
        // Participant information
        queryString = window.location.search;
        urlParams = new URLSearchParams(queryString);
        id = urlParams.get('participant');

        // document.body.style.cursor='none';

        // Font and size
        font = "Helvetica";
        fontSize = 18;
        fontWrap = 800;
    TextComponent famText
      color = black
      font = $font
      letterHeight = $fontSize
      pos = (0, 150)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = To familiarize yourself with the figures, please press the spacebar several times and look carefully.
      wrapWidth = fontWrap
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    ImageComponent famStim
      image [set every repeat] = $stim
      saveStartStop = False
      size = 250
      units = pix
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    KeyboardComponent famResp
      allowedKeys = ['space']
      correctAns = $answer
      forceEndRoutine = True
      saveStartStop = False
      store = nothing
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  Routine general
    CodeComponent introCode
      Code Type = Both
      Begin Experiment:
        # Font and size
        font = "Helvetica"
        fontSize = 24
        fontWrap = 1000

        # Category-key randomization
        keys = ['e', 'i']
        if randint(0, 2) == 0:
            cReverse = False # e is 0, i is 1
            kRandom = 'eis0'
        else:
            cReverse = True # i is 0, e is 1
            kRandom = 'eis1'

        # Abstract-visual feature randomization
        fRandom = ['f1isangle', 'f1issize']
        fRandom = fRandom[randint(0, 2)]

        thisExp.addData('randomization.features', fRandom)
        thisExp.addData('randomization.key', kRandom)
      Begin JS Experiment:
        // Participant information
        queryString = window.location.search;
        urlParams = new URLSearchParams(queryString);
        id = urlParams.get('participant');

        document.body.style.cursor='none';

        // Font and size
        font = "Helvetica";
        fontSize = 24;
        fontWrap = 1000;

        // Category-key randomization
        keys = ["e", "i"];
        if ((Math.round(Math.random()) === 0)) {
            cReverse = false; // e is 0, i is 1
            kRandom = "eis0";
        } else {
            cReverse = true; // i is 0, e is 1
            kRandom = "eis1";
        }

        // Abstract-visual feature randomization
        fRandom = ["f1isangle", "f1issize"];
        fRandom = fRandom[Math.round(Math.random())];

        psychoJS.experiment.addData('randomization.feature', fRandom);
        psychoJS.experiment.addData('randomization.key', kRandom);
    TextComponent introText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = fontWrap
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    KeyboardComponent introResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine consent
    CodeComponent participant
      Code Type = Both
      Begin JS Experiment:
        queryString = window.location.search;
        urlParams = new URLSearchParams(queryString);
        id = urlParams.get('participant');

        document.body.style.cursor='none';
    TextComponent consentText
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.5
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    KeyboardComponent consentResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine confirm
    TextComponent confirmText
      color = black
      font = Poppins
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        BESTÄTIGUNG DER EINVERSTÄNDNISERKLÄRUNG
        Ich habe die aufgeführten Bedingungen gelesen und verstanden. Ich hatte genügend Zeit eine Entscheidung zu treffen und nehme an der Studie teil, indem ich die Leertaste drücke.
    KeyboardComponent confirmResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine pretrain2
    TextComponent pretrainText2
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = $fontWrap
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      text:
        You need to attend to both the circle size and the line orientation to correctly categorize the figures.

        It usually takes a few trials before you start to learn about the figures:
        Please be patient.

        Place your fingers on the ‘e’ and ‘i’ keys and press the spacebar to start.
    KeyboardComponent pretrainResp2
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine filler
    CodeComponent fillerCode
      Code Type = Auto->JS
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      Begin Routine:
        path = fRandom + "/" + stim
    ImageComponent fillerStim
      image [set every repeat] = $path
      saveStartStop = False
      size = 250
      startVal [time (s)] = intertrial
      units = pix
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    KeyboardComponent fillerResp
      allowedKeys = 'e', 'i'
      correctAns = $answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = intertrial
      store = first key
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  Routine instruction
    CodeComponent infoCode1
      Code Type = Auto->JS
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      Begin Routine:
        clicked = False
        stimInvisible = False
    TextComponent infoText
      color = black
      font = $font
      letterHeight = $fontSize
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = stimInvisible
      wrapWidth = $fontWrap
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      text:
        Your task is to judge the similarity of the figures. You can enter your judgment by clicking on a slider. Please click on the location of the slider that corresponds to your spontaneous feeling of similarity.

        The further to the right you click on the slider, the more similar you feel the figures are. The further to the left you click, the less similar you feel the figures are.

        Please click on the slider to begin.
    SliderComponent infoSlider
      color = Black
      font = $font
      forceEndRoutine = False
      granularity = 0
      labels = ['very\ndissimilar', 'very\nsimilar']
      pos = (0, -100)
      saveStartStop = False
      size = (800, 15)
      stopVal [condition] = stimInvisible
      storeRating = False
      storeRatingTime = False
      styles = ('triangleMarker',)
      ticks = (0, 1)
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    CodeComponent infoCode2
      Code Type = Auto->JS
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      Each Frame:
        if (not clicked) and (infoSlider.getRating() > 0):
            offTime = t + 0.2
            clicked = True

        if clicked:
            if t > offTime:
                stimInvisible = True
  Routine trial
    CodeComponent code1
      Code Type = Auto->JS
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      Begin Routine:
        clicked = False
        stimInvisible = False
    ImageComponent image_l
      image [set every repeat] = $stim_l
      opacity [set every frame] = 1
      pos = (-150, 100)
      saveStartStop = False
      size = 250
      startVal [time (s)] = .5
      stopVal [condition] = stimInvisible
      units = pix
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    ImageComponent image_r
      image [set every repeat] = $stim_r
      opacity [set every frame] = 1
      pos = (150, 100)
      saveStartStop = False
      size = 250
      startVal [time (s)] = .5
      stopVal [condition] = stimInvisible
      units = pix
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    SliderComponent slider
      color = Black
      font = $font
      forceEndRoutine = False
      granularity = 0
      labels = ['very\ndissimilar', 'very\nsimilar']
      pos = (0, -100)
      saveStartStop = False
      size = (800, 15)
      startVal [time (s)] = .5
      stopVal [condition] = stimInvisible
      styles = ('triangleMarker',)
      ticks = (0, 1)
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    CodeComponent code2
      Code Type = Auto->JS
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      Each Frame:
        if (not clicked) and (slider.getRating() > 0):
            offTime = t + .2
            clicked = True

        if clicked:
            if t > offTime:
                stimInvisible = True
Flow
  LoopInitiator famtrials loopType="TrialHandler"
    conditionsFile = familiarization.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'stimuli/blank.png')]),
      OrderedDict([('stim', 'stimuli/1.png')]),
      OrderedDict([('stim', 'stimuli/2.png')]),
      OrderedDict([('stim', 'stimuli/3.png')]),
      OrderedDict([('stim', 'stimuli/4.png')]),
      OrderedDict([('stim', 'stimuli/5.png')]),
      OrderedDict([('stim', 'stimuli/6.png')]),
      OrderedDict([('stim', 'stimuli/7.png')]),
      OrderedDict([('stim', 'stimuli/8.png')]),
      OrderedDict([('stim', 'stimuli/1.png')]),
      OrderedDict([('stim', 'stimuli/2.png')]),
      OrderedDict([('stim', 'stimuli/7.png')]),
      OrderedDict([('stim', 'stimuli/8.png')]),
      OrderedDict([('stim', 'stimuli/5.png')]),
      OrderedDict([('stim', 'stimuli/6.png')]),
      OrderedDict([('stim', 'stimuli/3.png')]),
      OrderedDict([('stim', 'stimuli/4.png')]),
      OrderedDict([('stim', 'stimuli/1.png')]),
      OrderedDict([('stim', 'stimuli/2.png')])]
    Routine familiarization
  LoopTerminator famtrials
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('stim_l', 'stimuli/1.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/2.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/3.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/4.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/5.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/6.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/7.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/8.png'), ('stim_r', 'stimuli/1.png')]),
      OrderedDict([('stim_l', 'stimuli/1.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/2.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/3.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/4.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/5.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/6.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/7.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/8.png'), ('stim_r', 'stimuli/2.png')]),
      OrderedDict([('stim_l', 'stimuli/1.png'), ('stim_r', 'stimuli/3.png')]),
      OrderedDict([('stim_l', 'stimuli/2.png'), ('stim_r', 'stimuli/3.png')]),
      OrderedDict([('stim_l', 'stimuli/3.png'), ('stim_r', 'stimuli/3.png')]),
      OrderedDict([('stim_l', 'stimuli/4.png'), ('stim_r', 'stimuli/3.png')]),
      OrderedDict([('stim_l', 'stimuli/5.png'), ('stim_r', 'stimuli/3.png')])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
    Routine trial
  LoopTerminator trials
  Routine ending
